<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="Tutorial6_PotassiumChannelModel">
  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="tutorial6_controller.cellml">
    <component component_ref="parameters" name="parameters"/>
    <component component_ref="controller" name="controller"/>
  </import>
  <units name="millisecond">
    <unit prefix="milli" units="second"/>
  </units>
  <units name="millivolt">
    <unit prefix="milli" units="volt"/>
  </units>
  <units name="millimol">
    <unit prefix="milli" units="mole"/>
  </units>
  <units name="microA_per_cm2">
    <unit prefix="micro" units="ampere"/>
    <unit exponent="-2" prefix="centi" units="metre"/>
  </units>
  <units name="milliS_per_cm2">
    <unit prefix="milli" units="siemens"/>
    <unit exponent="-2" prefix="centi" units="metre"/>
  </units>
  <units name="per_millisecond">
    <unit exponent="-1" prefix="milli" units="second"/>
  </units>
  <units name="per_millivolt_millisecond">
    <unit units="per_millisecond"/>
    <unit exponent="-1" units="millivolt"/>
  </units>
  <component name="potassiumChannel">
    <variable name="E_K" units="millivolt" interface="public_and_private"/>
    <variable name="i_K" units="microA_per_cm2" interface="public"/>
    <variable name="g_K" units="milliS_per_cm2" interface="public_and_private"/>
    <variable name="V" units="millivolt" interface="public_and_private"/>
    <variable name="t" units="millisecond" interface="public_and_private"/>
    <variable name="n" units="dimensionless" interface="public_and_private"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>i_K</ci>
        <apply>
          <times/>
          <apply>
            <power/>
            <ci>n</ci>
            <cn cellml:units="dimensionless">4</cn>
          </apply>
          <ci>g_K</ci>
          <apply>
            <minus/>
            <ci>V</ci>
            <ci>E_K</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="nGate">
    <variable name="t" units="millisecond" interface="public"/>
    <variable name="V" units="millivolt" interface="public"/>
    <variable name="alpha_n" units="per_millisecond"/>
    <variable name="beta_n" units="per_millisecond"/>
    <variable name="n" units="dimensionless" interface="public_and_private"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>n</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>alpha_n</ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1</cn>
              <ci>n</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>beta_n</ci>
            <ci>n</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>alpha_n</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="per_millivolt_millisecond">0.01</cn>
            <apply>
              <plus/>
              <ci>V</ci>
              <cn cellml:units="millivolt">10</cn>
            </apply>
          </apply>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <plus/>
                  <ci>V</ci>
                  <cn cellml:units="millivolt">10</cn>
                </apply>
                <cn cellml:units="millivolt">10</cn>
              </apply>
            </apply>
            <cn cellml:units="dimensionless">1</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta_n</ci>
        <apply>
          <times/>
          <cn cellml:units="per_millisecond">0.125</cn>
          <apply>
            <exp/>
            <apply>
              <divide/>
              <ci>V</ci>
              <cn cellml:units="millivolt">80</cn>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <connection component_1="potassiumChannel" component_2="parameters">
    <map_variables variable_1="E_K" variable_2="E_K"/>
    <map_variables variable_1="g_K" variable_2="g_K"/>
    <map_variables variable_1="n" variable_2="n"/>
  </connection>
  <connection component_1="potassiumChannel" component_2="controller">
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="t" variable_2="t"/>
  </connection>
  <connection component_1="potassiumChannel" component_2="nGate">
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="t" variable_2="t"/>
    <map_variables variable_1="n" variable_2="n"/>
  </connection>
  <encapsulation>
    <component_ref component="potassiumChannel">
      <component_ref component="nGate"/>
    </component_ref>
  </encapsulation>
</model>
