<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="Tutorial7_SodiumChannelModel">
  <import xmlns:xlink="http://www.w3.org/1999/xlink" xlink:href="tutorial7_controller.cellml">
    <component component_ref="sodiumChannel_controller" name="controller"/>
    <component component_ref="parameters" name="parameters"/>
  </import>
  <units name="mV">
    <unit prefix="milli" units="volt"/>
  </units>
  <units name="ms">
    <unit prefix="milli" units="second"/>
  </units>
  <units name="mS_per_cm2">
    <unit prefix="milli" units="siemens"/>
    <unit exponent="-2" prefix="centi" units="metre"/>
  </units>
  <units name="microA_per_cm2">
    <unit prefix="micro" units="ampere"/>
    <unit exponent="-2" prefix="centi" units="metre"/>
  </units>
  <units name="mM">
    <unit prefix="milli" units="mole"/>
  </units>
  <units name="per_mV_ms">
    <unit exponent="-1" prefix="milli" units="second"/>
    <unit exponent="-1" prefix="milli" units="volt"/>
  </units>
  <units name="per_ms">
    <unit exponent="-1" prefix="milli" units="second"/>
  </units>
  <component name="sodiumChannel">
    <variable name="V" units="mV" interface="public_and_private"/>
    <variable name="t" units="ms" interface="public_and_private"/>
    <variable name="h" units="dimensionless" interface="public_and_private"/>
    <variable name="m" units="dimensionless" interface="public_and_private"/>
    <variable name="g_Na" units="mS_per_cm2" interface="public_and_private"/>
    <variable name="E_Na" units="mV" interface="public_and_private"/>
    <variable name="i_Na" units="microA_per_cm2" interface="public"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" 
      xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>i_Na</ci>
        <apply>
          <times/>
          <ci>g_Na</ci>
          <apply>
            <power/>
            <ci>m</ci>
            <cn cellml:units="dimensionless">3</cn>
          </apply>
          <ci>h</ci>
          <apply>
            <minus/>
            <ci>V</ci>
            <ci>E_Na</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="mGate">
    <variable name="V" units="mV" interface="public"/>
    <variable name="t" units="ms" interface="public"/>
    <variable name="alpha_m" units="per_ms"/>
    <variable name="beta_m" units="per_ms"/>
    <variable name="m" units="dimensionless" interface="public_and_private"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" 
      xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>alpha_m</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <apply>
              <minus/>
              <cn cellml:units="per_mV_ms">0.1</cn>
            </apply>
            <apply>
              <plus/>
              <ci>V</ci>
              <cn cellml:units="mV">50</cn>
            </apply>
          </apply>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <apply>
                    <plus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">50</cn>
                  </apply>
                </apply>
                <cn cellml:units="mV">10</cn>
              </apply>
            </apply>
            <cn cellml:units="dimensionless">1</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta_m</ci>
        <apply>
          <times/>
          <cn cellml:units="per_ms">4</cn>
          <apply>
            <exp/>
            <apply>
              <divide/>
              <apply>
                <minus/>
                <apply>
                  <plus/>
                  <ci>V</ci>
                  <cn cellml:units="mV">75</cn>
                </apply>
              </apply>
              <cn cellml:units="mV">18</cn>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>m</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>alpha_m</ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1</cn>
              <ci>m</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>m</ci>
            <ci>beta_m</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="hGate">
    <variable name="V" units="mV" interface="public"/>
    <variable name="t" units="ms" interface="public"/>
    <variable name="alpha_h" units="per_ms"/>
    <variable name="beta_h" units="per_ms"/>
    <variable name="h" units="dimensionless" interface="public_and_private"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" 
      xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>alpha_h</ci>
        <apply>
          <times/>
          <cn cellml:units="per_ms">0.07</cn>
          <apply>
            <exp/>
            <apply>
              <divide/>
              <apply>
                <minus/>
                <apply>
                  <plus/>
                  <ci>V</ci>
                  <cn cellml:units="mV">75</cn>
                </apply>
              </apply>
              <cn cellml:units="mV">20</cn>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta_h</ci>
        <apply>
          <divide/>
          <cn cellml:units="per_ms">1</cn>
          <apply>
            <plus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <apply>
                    <plus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">45</cn>
                  </apply>
                </apply>
                <cn cellml:units="mV">10</cn>
              </apply>
            </apply>
            <cn cellml:units="dimensionless">1</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>h</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>alpha_h</ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1</cn>
              <ci>h</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>h</ci>
            <ci>beta_h</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <connection component_1="sodiumChannel" component_2="controller">
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="t" variable_2="t"/>
  </connection>
  <connection component_1="sodiumChannel" component_2="mGate">
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="t" variable_2="t"/>
    <map_variables variable_1="m" variable_2="m"/>
  </connection>
  <connection component_1="sodiumChannel" component_2="hGate">
    <map_variables variable_1="V" variable_2="V"/>
    <map_variables variable_1="t" variable_2="t"/>
    <map_variables variable_1="h" variable_2="h"/>
  </connection>
  <connection component_1="sodiumChannel" component_2="parameters">
    <map_variables variable_1="h" variable_2="h"/>
    <map_variables variable_1="m" variable_2="m"/>
    <map_variables variable_1="g_Na" variable_2="g_Na"/>
    <map_variables variable_1="E_Na" variable_2="E_Na"/>
  </connection>
  <encapsulation>
    <component_ref component="sodiumChannel">
      <component_ref component="mGate"/>
      <component_ref component="hGate"/>
    </component_ref>
  </encapsulation>
</model>
