<?xml version='1.0' encoding='UTF-8'?>
<model name="my_model" xmlns="http://www.cellml.org/cellml/2.0#" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
    <!-- Coverage-->
    <units name="per_second">
        <unit exponent="-1" units="second"/>
    </units>
    <component name="my_component">
        <variable name="t" units="second"/>
        <variable initial_value="0.0" name="x" units="dimensionless"/>
        <variable name="eqnEq" units="dimensionless"/>
        <variable name="eqnNeq" units="dimensionless"/>
        <variable name="eqnLt" units="dimensionless"/>
        <variable name="eqnLeq" units="dimensionless"/>
        <variable name="eqnGt" units="dimensionless"/>
        <variable name="eqnGeq" units="dimensionless"/>
        <variable name="eqnPlus" units="dimensionless"/>
        <variable name="eqnPlusMultiple" units="dimensionless"/>
        <variable name="eqnPlusParentheses" units="dimensionless"/>
        <variable name="eqnPlusUnary" units="dimensionless"/>
        <variable name="eqnMinus" units="dimensionless"/>
        <variable name="eqnMinusParentheses" units="dimensionless"/>
        <variable name="eqnMinusParenthesesPlusWith" units="dimensionless"/>
        <variable name="eqnMinusParenthesesPlusWithout" units="dimensionless"/>
        <variable name="eqnMinusUnary" units="dimensionless"/>
        <variable name="eqnMinusUnaryParentheses" units="dimensionless"/>
        <variable name="eqnTimes" units="dimensionless"/>
        <variable name="eqnTimesMultiple" units="dimensionless"/>
        <variable name="eqnTimesParentheses" units="dimensionless"/>
        <variable name="eqnTimesParenthesesLeftPlusWith" units="dimensionless"/>
        <variable name="eqnTimesParenthesesLeftPlusWithout" units="dimensionless"/>
        <variable name="eqnTimesParenthesesLeftMinusWith" units="dimensionless"/>
        <variable name="eqnTimesParenthesesLeftMinusWithout" units="dimensionless"/>
        <variable name="eqnTimesParenthesesRightPlusWith" units="dimensionless"/>
        <variable name="eqnTimesParenthesesRightPlusWithout" units="dimensionless"/>
        <variable name="eqnTimesParenthesesRightMinusWith" units="dimensionless"/>
        <variable name="eqnTimesParenthesesRightMinusWithout" units="dimensionless"/>
        <variable name="eqnDivide" units="dimensionless"/>
        <variable name="eqnDivideParentheses" units="dimensionless"/>
        <variable name="eqnDivideParenthesesLeftPlusWith" units="dimensionless"/>
        <variable name="eqnDivideParenthesesLeftPlusWithout" units="dimensionless"/>
        <variable name="eqnDivideParenthesesLeftMinusWith" units="dimensionless"/>
        <variable name="eqnDivideParenthesesLeftMinusWithout" units="dimensionless"/>
        <variable name="eqnDivideParenthesesRightPlusWith" units="dimensionless"/>
        <variable name="eqnDivideParenthesesRightPlusWithout" units="dimensionless"/>
        <variable name="eqnDivideParenthesesRightMinusWith" units="dimensionless"/>
        <variable name="eqnDivideParenthesesRightMinusWithout" units="dimensionless"/>
        <variable name="eqnDivideParenthesesRightTimes" units="dimensionless"/>
        <variable name="eqnDivideParenthesesRightDivide" units="dimensionless"/>
        <variable name="eqnPowerSqrt" units="dimensionless"/>
        <variable name="eqnPowerSqr" units="dimensionless"/>
        <variable name="eqnPowerCube" units="dimensionless"/>
        <variable name="eqnPowerCi" units="dimensionless"/>
        <variable name="eqnRootSqrt" units="dimensionless"/>
        <variable name="eqnRootSqrtOther" units="dimensionless"/>
        <variable name="eqnRootCube" units="dimensionless"/>
        <variable name="eqnRootCi" units="dimensionless"/>
        <variable name="eqnAbs" units="dimensionless"/>
        <variable name="eqnExp" units="dimensionless"/>
        <variable name="eqnLn" units="dimensionless"/>
        <variable name="eqnLog" units="dimensionless"/>
        <variable name="eqnLog2" units="dimensionless"/>
        <variable name="eqnLog10" units="dimensionless"/>
        <variable name="eqnLogCi" units="dimensionless"/>
        <variable name="eqnCeiling" units="dimensionless"/>
        <variable name="eqnFloor" units="dimensionless"/>
        <variable name="eqnFactorial" units="dimensionless"/>
        <variable name="eqnAnd" units="dimensionless"/>
        <variable name="eqnAndMultiple" units="dimensionless"/>
        <variable name="eqnAndParentheses" units="dimensionless"/>
        <variable name="eqnAndParenthesesLeftPlusWith" units="dimensionless"/>
        <variable name="eqnAndParenthesesLeftPlusWithout" units="dimensionless"/>
        <variable name="eqnAndParenthesesLeftMinusWith" units="dimensionless"/>
        <variable name="eqnAndParenthesesLeftMinusWithout" units="dimensionless"/>
        <variable name="eqnAndParenthesesLeftPower" units="dimensionless"/>
        <variable name="eqnAndParenthesesLeftRoot" units="dimensionless"/>
        <variable name="eqnAndParenthesesRightPlusWith" units="dimensionless"/>
        <variable name="eqnAndParenthesesRightPlusWithout" units="dimensionless"/>
        <variable name="eqnAndParenthesesRightMinusWith" units="dimensionless"/>
        <variable name="eqnAndParenthesesRightMinusWithout" units="dimensionless"/>
        <variable name="eqnAndParenthesesRightPower" units="dimensionless"/>
        <variable name="eqnAndParenthesesRightRoot" units="dimensionless"/>
        <variable name="eqnOr" units="dimensionless"/>
        <variable name="eqnOrMultiple" units="dimensionless"/>
        <variable name="eqnOrParentheses" units="dimensionless"/>
        <variable name="eqnOrParenthesesLeftPlusWith" units="dimensionless"/>
        <variable name="eqnOrParenthesesLeftPlusWithout" units="dimensionless"/>
        <variable name="eqnOrParenthesesLeftMinusWith" units="dimensionless"/>
        <variable name="eqnOrParenthesesLeftMinusWithout" units="dimensionless"/>
        <variable name="eqnOrParenthesesLeftPower" units="dimensionless"/>
        <variable name="eqnOrParenthesesLeftRoot" units="dimensionless"/>
        <variable name="eqnOrParenthesesRightPlusWith" units="dimensionless"/>
        <variable name="eqnOrParenthesesRightPlusWithout" units="dimensionless"/>
        <variable name="eqnOrParenthesesRightMinusWith" units="dimensionless"/>
        <variable name="eqnOrParenthesesRightMinusWithout" units="dimensionless"/>
        <variable name="eqnOrParenthesesRightPower" units="dimensionless"/>
        <variable name="eqnOrParenthesesRightRoot" units="dimensionless"/>
        <variable name="eqnXor" units="dimensionless"/>
        <variable name="eqnXorMultiple" units="dimensionless"/>
        <variable name="eqnXorParentheses" units="dimensionless"/>
        <variable name="eqnXorParenthesesLeftPlusWith" units="dimensionless"/>
        <variable name="eqnXorParenthesesLeftPlusWithout" units="dimensionless"/>
        <variable name="eqnXorParenthesesLeftMinusWith" units="dimensionless"/>
        <variable name="eqnXorParenthesesLeftMinusWithout" units="dimensionless"/>
        <variable name="eqnXorParenthesesLeftPower" units="dimensionless"/>
        <variable name="eqnXorParenthesesLeftRoot" units="dimensionless"/>
        <variable name="eqnXorParenthesesRightPlusWith" units="dimensionless"/>
        <variable name="eqnXorParenthesesRightPlusWithout" units="dimensionless"/>
        <variable name="eqnXorParenthesesRightMinusWith" units="dimensionless"/>
        <variable name="eqnXorParenthesesRightMinusWithout" units="dimensionless"/>
        <variable name="eqnXorParenthesesRightPower" units="dimensionless"/>
        <variable name="eqnXorParenthesesRightRoot" units="dimensionless"/>
        <variable name="eqnNot" units="dimensionless"/>
        <variable name="eqnMin" units="dimensionless"/>
        <variable name="eqnMinMultiple" units="dimensionless"/>
        <variable name="eqnMax" units="dimensionless"/>
        <variable name="eqnMaxMultiple" units="dimensionless"/>
        <variable name="eqnGcd" units="dimensionless"/>
        <variable name="eqnGcdMultiple" units="dimensionless"/>
        <variable name="eqnLcm" units="dimensionless"/>
        <variable name="eqnLcmMultiple" units="dimensionless"/>
        <variable name="eqnSin" units="dimensionless"/>
        <variable name="eqnCos" units="dimensionless"/>
        <variable name="eqnTan" units="dimensionless"/>
        <variable name="eqnSec" units="dimensionless"/>
        <variable name="eqnCsc" units="dimensionless"/>
        <variable name="eqnCot" units="dimensionless"/>
        <variable name="eqnSinh" units="dimensionless"/>
        <variable name="eqnCosh" units="dimensionless"/>
        <variable name="eqnTanh" units="dimensionless"/>
        <variable name="eqnSech" units="dimensionless"/>
        <variable name="eqnCsch" units="dimensionless"/>
        <variable name="eqnCoth" units="dimensionless"/>
        <variable name="eqnArcsin" units="dimensionless"/>
        <variable name="eqnArccos" units="dimensionless"/>
        <variable name="eqnArctan" units="dimensionless"/>
        <variable name="eqnArcsec" units="dimensionless"/>
        <variable name="eqnArccsc" units="dimensionless"/>
        <variable name="eqnArccot" units="dimensionless"/>
        <variable name="eqnArcsinh" units="dimensionless"/>
        <variable name="eqnArccosh" units="dimensionless"/>
        <variable name="eqnArctanh" units="dimensionless"/>
        <variable name="eqnArcsech" units="dimensionless"/>
        <variable name="eqnArccsch" units="dimensionless"/>
        <variable name="eqnArccoth" units="dimensionless"/>
        <variable name="eqnRem" units="dimensionless"/>
        <variable name="eqnPiecewisePiece" units="dimensionless"/>
        <variable name="eqnPiecewisePieceOtherwise" units="dimensionless"/>
        <variable name="eqnPiecewisePiecePiecePiece" units="dimensionless"/>
        <variable name="eqnPiecewisePiecePiecePieceOtherwise" units="dimensionless"/>
        <variable name="eqnCn" units="dimensionless"/>
        <variable name="eqnCi" units="dimensionless"/>
        <variable name="eqnTrue" units="dimensionless"/>
        <variable name="eqnFalse" units="dimensionless"/>
        <variable name="eqnExponentiale" units="dimensionless"/>
        <variable name="eqnPi" units="dimensionless"/>
        <variable name="eqnInfinity" units="dimensionless"/>
        <variable name="eqnNotanumber" units="dimensionless"/>
        <variable initial_value="1.0" name="m" units="dimensionless"/>
        <variable initial_value="2.0" name="n" units="dimensionless"/>
        <variable initial_value="3.0" name="o" units="dimensionless"/>
        <variable initial_value="4.0" name="p" units="dimensionless"/>
        <variable initial_value="5.0" name="q" units="dimensionless"/>
        <variable initial_value="6.0" name="r" units="dimensionless"/>
        <variable initial_value="7.0" name="s" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>x</ci>
                </apply>
                <cn cellml:units="per_second">1.0</cn>
            </apply>
            <apply>
                <eq/>
                <ci>eqnEq</ci>
                <apply>
                    <eq/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnNeq</ci>
                <apply>
                    <neq/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLt</ci>
                <apply>
                    <lt/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLeq</ci>
                <apply>
                    <leq/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnGt</ci>
                <apply>
                    <gt/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnGeq</ci>
                <apply>
                    <geq/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPlus</ci>
                <apply>
                    <plus/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPlusMultiple</ci>
                <apply>
                    <plus/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPlusParentheses</ci>
                <apply>
                    <plus/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPlusUnary</ci>
                <apply>
                    <plus/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMinus</ci>
                <apply>
                    <minus/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMinusParentheses</ci>
                <apply>
                    <minus/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMinusParenthesesPlusWith</ci>
                <apply>
                    <minus/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMinusParenthesesPlusWithout</ci>
                <apply>
                    <minus/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMinusUnary</ci>
                <apply>
                    <minus/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMinusUnaryParentheses</ci>
                <apply>
                    <minus/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTimes</ci>
                <apply>
                    <times/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTimesMultiple</ci>
                <apply>
                    <times/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTimesParentheses</ci>
                <apply>
                    <times/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTimesParenthesesLeftPlusWith</ci>
                <apply>
                    <times/>
                    <apply>
                        <plus/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTimesParenthesesLeftPlusWithout</ci>
                <apply>
                    <times/>
                    <apply>
                        <plus/>
                        <ci>m</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>n</ci>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTimesParenthesesLeftMinusWith</ci>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTimesParenthesesLeftMinusWithout</ci>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <ci>m</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>n</ci>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTimesParenthesesRightPlusWith</ci>
                <apply>
                    <times/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTimesParenthesesRightPlusWithout</ci>
                <apply>
                    <times/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTimesParenthesesRightMinusWith</ci>
                <apply>
                    <times/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTimesParenthesesRightMinusWithout</ci>
                <apply>
                    <times/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnDivide</ci>
                <apply>
                    <divide/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnDivideParentheses</ci>
                <apply>
                    <divide/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnDivideParenthesesLeftPlusWith</ci>
                <apply>
                    <divide/>
                    <apply>
                        <plus/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnDivideParenthesesLeftPlusWithout</ci>
                <apply>
                    <divide/>
                    <apply>
                        <plus/>
                        <ci>m</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>n</ci>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnDivideParenthesesLeftMinusWith</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnDivideParenthesesLeftMinusWithout</ci>
                <apply>
                    <divide/>
                    <apply>
                        <minus/>
                        <ci>m</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>n</ci>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnDivideParenthesesRightPlusWith</ci>
                <apply>
                    <divide/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnDivideParenthesesRightPlusWithout</ci>
                <apply>
                    <divide/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnDivideParenthesesRightMinusWith</ci>
                <apply>
                    <divide/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnDivideParenthesesRightMinusWithout</ci>
                <apply>
                    <divide/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnDivideParenthesesRightTimes</ci>
                <apply>
                    <divide/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnDivideParenthesesRightDivide</ci>
                <apply>
                    <divide/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <divide/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPowerSqrt</ci>
                <apply>
                    <power/>
                    <ci>m</ci>
                    <cn cellml:units="dimensionless">0.5</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPowerSqr</ci>
                <apply>
                    <power/>
                    <ci>m</ci>
                    <cn cellml:units="dimensionless">2.0</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPowerCube</ci>
                <apply>
                    <power/>
                    <ci>m</ci>
                    <cn cellml:units="dimensionless">3.0</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPowerCi</ci>
                <apply>
                    <power/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnRootSqrt</ci>
                <apply>
                    <root/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnRootSqrtOther</ci>
                <apply>
                    <root/>
                    <degree>
                        <cn cellml:units="dimensionless">2.0</cn>
                    </degree>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnRootCube</ci>
                <apply>
                    <root/>
                    <degree>
                        <cn cellml:units="dimensionless">3.0</cn>
                    </degree>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnRootCi</ci>
                <apply>
                    <root/>
                    <degree>
                        <ci>n</ci>
                    </degree>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAbs</ci>
                <apply>
                    <abs/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnExp</ci>
                <apply>
                    <exp/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLn</ci>
                <apply>
                    <ln/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLog</ci>
                <apply>
                    <log/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLog2</ci>
                <apply>
                    <log/>
                    <logbase>
                        <cn cellml:units="dimensionless">2.0</cn>
                    </logbase>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLog10</ci>
                <apply>
                    <log/>
                    <logbase>
                        <cn cellml:units="dimensionless">10.0</cn>
                    </logbase>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLogCi</ci>
                <apply>
                    <log/>
                    <logbase>
                        <ci>n</ci>
                    </logbase>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCeiling</ci>
                <apply>
                    <ceiling/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnFloor</ci>
                <apply>
                    <floor/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnFactorial</ci>
                <apply>
                    <factorial/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAnd</ci>
                <apply>
                    <and/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAndMultiple</ci>
                <apply>
                    <and/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAndParentheses</ci>
                <apply>
                    <and/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAndParenthesesLeftPlusWith</ci>
                <apply>
                    <and/>
                    <apply>
                        <plus/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAndParenthesesLeftPlusWithout</ci>
                <apply>
                    <and/>
                    <apply>
                        <plus/>
                        <ci>m</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>n</ci>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAndParenthesesLeftMinusWith</ci>
                <apply>
                    <and/>
                    <apply>
                        <minus/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAndParenthesesLeftMinusWithout</ci>
                <apply>
                    <and/>
                    <apply>
                        <minus/>
                        <ci>m</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>n</ci>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAndParenthesesLeftPower</ci>
                <apply>
                    <and/>
                    <apply>
                        <power/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAndParenthesesLeftRoot</ci>
                <apply>
                    <and/>
                    <apply>
                        <root/>
                        <ci>n</ci>
                        <ci>m</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAndParenthesesRightPlusWith</ci>
                <apply>
                    <and/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAndParenthesesRightPlusWithout</ci>
                <apply>
                    <and/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAndParenthesesRightMinusWith</ci>
                <apply>
                    <and/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAndParenthesesRightMinusWithout</ci>
                <apply>
                    <and/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAndParenthesesRightPower</ci>
                <apply>
                    <and/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <power/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnAndParenthesesRightRoot</ci>
                <apply>
                    <and/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <root/>
                        <ci>p</ci>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOr</ci>
                <apply>
                    <or/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOrMultiple</ci>
                <apply>
                    <or/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOrParentheses</ci>
                <apply>
                    <or/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOrParenthesesLeftPlusWith</ci>
                <apply>
                    <or/>
                    <apply>
                        <plus/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOrParenthesesLeftPlusWithout</ci>
                <apply>
                    <or/>
                    <apply>
                        <plus/>
                        <ci>m</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>n</ci>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOrParenthesesLeftMinusWith</ci>
                <apply>
                    <or/>
                    <apply>
                        <minus/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOrParenthesesLeftMinusWithout</ci>
                <apply>
                    <or/>
                    <apply>
                        <minus/>
                        <ci>m</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>n</ci>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOrParenthesesLeftPower</ci>
                <apply>
                    <or/>
                    <apply>
                        <power/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOrParenthesesLeftRoot</ci>
                <apply>
                    <or/>
                    <apply>
                        <root/>
                        <ci>n</ci>
                        <ci>m</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOrParenthesesRightPlusWith</ci>
                <apply>
                    <or/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOrParenthesesRightPlusWithout</ci>
                <apply>
                    <or/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOrParenthesesRightMinusWith</ci>
                <apply>
                    <or/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOrParenthesesRightMinusWithout</ci>
                <apply>
                    <or/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOrParenthesesRightPower</ci>
                <apply>
                    <or/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <power/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnOrParenthesesRightRoot</ci>
                <apply>
                    <or/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <root/>
                        <ci>p</ci>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXor</ci>
                <apply>
                    <xor/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXorMultiple</ci>
                <apply>
                    <xor/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXorParentheses</ci>
                <apply>
                    <xor/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXorParenthesesLeftPlusWith</ci>
                <apply>
                    <xor/>
                    <apply>
                        <plus/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXorParenthesesLeftPlusWithout</ci>
                <apply>
                    <xor/>
                    <apply>
                        <plus/>
                        <ci>m</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>n</ci>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXorParenthesesLeftMinusWith</ci>
                <apply>
                    <xor/>
                    <apply>
                        <minus/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXorParenthesesLeftMinusWithout</ci>
                <apply>
                    <xor/>
                    <apply>
                        <minus/>
                        <ci>m</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>n</ci>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXorParenthesesLeftPower</ci>
                <apply>
                    <xor/>
                    <apply>
                        <power/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXorParenthesesLeftRoot</ci>
                <apply>
                    <xor/>
                    <apply>
                        <root/>
                        <ci>n</ci>
                        <ci>m</ci>
                    </apply>
                    <apply>
                        <gt/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXorParenthesesRightPlusWith</ci>
                <apply>
                    <xor/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXorParenthesesRightPlusWithout</ci>
                <apply>
                    <xor/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <plus/>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXorParenthesesRightMinusWith</ci>
                <apply>
                    <xor/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXorParenthesesRightMinusWithout</ci>
                <apply>
                    <xor/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXorParenthesesRightPower</ci>
                <apply>
                    <xor/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <power/>
                        <ci>o</ci>
                        <ci>p</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnXorParenthesesRightRoot</ci>
                <apply>
                    <xor/>
                    <apply>
                        <lt/>
                        <ci>m</ci>
                        <ci>n</ci>
                    </apply>
                    <apply>
                        <root/>
                        <ci>p</ci>
                        <ci>o</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnNot</ci>
                <apply>
                    <not/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMin</ci>
                <apply>
                    <min/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMinMultiple</ci>
                <apply>
                    <min/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMax</ci>
                <apply>
                    <max/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnMaxMultiple</ci>
                <apply>
                    <max/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnGcd</ci>
                <apply>
                    <gcd/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnGcdMultiple</ci>
                <apply>
                    <gcd/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLcm</ci>
                <apply>
                    <lcm/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnLcmMultiple</ci>
                <apply>
                    <lcm/>
                    <ci>m</ci>
                    <ci>n</ci>
                    <ci>o</ci>
                    <ci>p</ci>
                    <ci>q</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnSin</ci>
                <apply>
                    <sin/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCos</ci>
                <apply>
                    <cos/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTan</ci>
                <apply>
                    <tan/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnSec</ci>
                <apply>
                    <sec/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCsc</ci>
                <apply>
                    <csc/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCot</ci>
                <apply>
                    <cot/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnSinh</ci>
                <apply>
                    <sinh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCosh</ci>
                <apply>
                    <cosh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTanh</ci>
                <apply>
                    <tanh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnSech</ci>
                <apply>
                    <sech/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCsch</ci>
                <apply>
                    <csch/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCoth</ci>
                <apply>
                    <coth/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArcsin</ci>
                <apply>
                    <arcsin/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArccos</ci>
                <apply>
                    <arccos/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArctan</ci>
                <apply>
                    <arctan/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArcsec</ci>
                <apply>
                    <arcsec/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArccsc</ci>
                <apply>
                    <arccsc/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArccot</ci>
                <apply>
                    <arccot/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArcsinh</ci>
                <apply>
                    <arcsinh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArccosh</ci>
                <apply>
                    <arccosh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArctanh</ci>
                <apply>
                    <arctanh/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArcsech</ci>
                <apply>
                    <arcsech/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArccsch</ci>
                <apply>
                    <arccsch/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnArccoth</ci>
                <apply>
                    <arccoth/>
                    <ci>m</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnRem</ci>
                <apply>
                    <rem/>
                    <ci>m</ci>
                    <ci>n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPiecewisePiece</ci>
                <piecewise>
                    <piece>
                        <ci>m</ci>
                        <apply>
                            <gt/>
                            <ci>m</ci>
                            <ci>n</ci>
                        </apply>
                    </piece>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPiecewisePieceOtherwise</ci>
                <piecewise>
                    <piece>
                        <ci>m</ci>
                        <apply>
                            <gt/>
                            <ci>m</ci>
                            <ci>n</ci>
                        </apply>
                    </piece>
                    <otherwise>
                        <ci>o</ci>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPiecewisePiecePiecePiece</ci>
                <piecewise>
                    <piece>
                        <ci>m</ci>
                        <apply>
                            <gt/>
                            <ci>m</ci>
                            <ci>n</ci>
                        </apply>
                    </piece>
                    <piece>
                        <ci>o</ci>
                        <apply>
                            <gt/>
                            <ci>o</ci>
                            <ci>p</ci>
                        </apply>
                    </piece>
                    <piece>
                        <ci>q</ci>
                        <apply>
                            <gt/>
                            <ci>q</ci>
                            <ci>r</ci>
                        </apply>
                    </piece>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPiecewisePiecePiecePieceOtherwise</ci>
                <piecewise>
                    <piece>
                        <ci>m</ci>
                        <apply>
                            <gt/>
                            <ci>m</ci>
                            <ci>n</ci>
                        </apply>
                    </piece>
                    <piece>
                        <ci>o</ci>
                        <apply>
                            <gt/>
                            <ci>o</ci>
                            <ci>p</ci>
                        </apply>
                    </piece>
                    <piece>
                        <ci>q</ci>
                        <apply>
                            <gt/>
                            <ci>q</ci>
                            <ci>r</ci>
                        </apply>
                    </piece>
                    <otherwise>
                        <ci>s</ci>
                    </otherwise>
                </piecewise>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCn</ci>
                <cn cellml:units="dimensionless">3.0</cn>
            </apply>
            <apply>
                <eq/>
                <ci>eqnCi</ci>
                <ci>m</ci>
            </apply>
            <apply>
                <eq/>
                <ci>eqnTrue</ci>
                <true/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnFalse</ci>
                <false/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnExponentiale</ci>
                <exponentiale/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnPi</ci>
                <pi/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnInfinity</ci>
                <infinity/>
            </apply>
            <apply>
                <eq/>
                <ci>eqnNotanumber</ci>
                <notanumber/>
            </apply>
        </math>
    </component>
</model>
