<?xml version='1.0' encoding='UTF-8'?>
<model name="my_model" xmlns="http://www.cellml.org/cellml/2.0#" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
  <component name="my_component">
    <!-- Precomputed constants -->
    <variable name="w" units="dimensionless"/>
    <variable name="x" units="dimensionless"/>
    <variable name="y" units="dimensionless"/>
    <variable name="z" units="dimensionless"/>

    <!-- Unknowns to solve -->
    <variable name="a" units="dimensionless"/>
    <variable name="b" units="dimensionless"/>
    <variable name="c" units="dimensionless"/>

    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <!-- Equation 1: a * w = 4 -->
      <!-- Test equation for multiplication -->
      <apply>
        <eq/>
        <apply><times/><ci>a</ci><ci>w</ci></apply>
        <cn cellml:units="dimensionless">4</cn>
      </apply>

      <!-- Equation 2: b / y = 18 -->
      <!-- Test equation for division -->
      <apply>
        <eq/>
        <apply>
          <divide/>
          <ci>b</ci>
          <ci>y</ci>
        </apply>
        <cn cellml:units="dimensionless">18</cn>
      </apply>

      <!-- Equation 3: (c * z) / (x * 3) = 10 -->
      <!-- Test equation combining multiplication and division -->
      <apply>
        <eq/>
        <apply>
          <divide/>
          <apply><times/><ci>c</ci><ci>z</ci></apply>
          <apply><times/><ci>x</ci><cn cellml:units="dimensionless">3</cn></apply>
        </apply>
        <cn cellml:units="dimensionless">10</cn>
      </apply>

      <!-- Initialise constants -->
      <apply><eq/><ci>w</ci><cn cellml:units="dimensionless">2</cn></apply>
      <apply><eq/><ci>x</ci><cn cellml:units="dimensionless">3</cn></apply>
      <apply><eq/><ci>y</ci><cn cellml:units="dimensionless">4</cn></apply>
      <apply><eq/><ci>z</ci><cn cellml:units="dimensionless">5</cn></apply>
    </math>
  </component>
</model>
