<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="UnarrangedTrigEquations">
  <component name="Component">
    <!-- Precomputed constants -->
    <variable name="w" units="radian"/>
    <variable name="x" units="radian"/>
    <variable name="y" units="radian"/>

    <!-- Unknowns to solve -->
    <variable name="a" units="dimensionless"/>
    <variable name="b" units="dimensionless"/>
    <variable name="c" units="dimensionless"/>

    <math xmlns="http://www.w3.org/1998/Math/MathML"
          xmlns:cellml="http://www.cellml.org/cellml/2.0#">

      <!-- Equation 1: 2*a + sin(w) = 1 -->
      <!-- Test equation for sine -->
      <apply>
        <eq/>
        <apply><plus/><apply><times/><cn cellml:units="dimensionless">2</cn><ci>a</ci></apply><apply><sin/><ci>w</ci></apply></apply>
        <cn cellml:units="dimensionless">1</cn>
      </apply>

      <!-- Equation 2: cos(x + 4) - b = 0 -->
      <!-- Test equation for cosine -->
      <apply>
        <eq/>
        <apply><minus/><apply><cos/><apply><plus/><cn cellml:units="radian">4</cn><ci>x</ci></apply></apply><ci>b</ci></apply>
        <cn cellml:units="dimensionless">0</cn>
      </apply>

      <!-- Equation 3: c - tan(3 - y) = 2 -->
      <!-- Test equation for tangent -->
      <apply>
        <eq/>
        <apply><minus/><ci>c</ci><apply><tan/><apply><minus/><cn cellml:units="radian">3</cn><ci>y</ci></apply></apply></apply>
        <cn cellml:units="dimensionless">2</cn>
      </apply>

      <!-- Initialise constants -->
      <apply><eq/><ci>w</ci><cn cellml:units="radian">0.5</cn></apply>
      <apply><eq/><ci>x</ci><cn cellml:units="radian">1.0</cn></apply>
      <apply><eq/><ci>y</ci><cn cellml:units="radian">1.5</cn></apply>

    </math>
  </component>
</model>
