<?xml version='1.0' encoding='UTF-8'?>
<model name="times" xmlns="http://www.cellml.org/cellml/2.0#" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
    <units name="frog"/>
    <units name="second_by_volt">
        <unit units="second"/>
        <unit units="volt"/>
    </units>
    <units name="volt_by_volt">
        <unit units="volt"/>
        <unit units="volt"/>
    </units>
    <units name="frog_by_volt">
        <unit units="frog"/>
        <unit units="volt"/>
    </units>
    <component name="main">
        <variable name="a" units="dimensionless"/>
        <variable name="b" units="dimensionless"/>
        <variable name="c" units="dimensionless"/>
        <variable name="d" units="dimensionless"/>
        <variable name="e" units="second_by_volt"/>
        <variable name="f" units="volt_by_volt"/>
        <variable name="g" units="frog_by_volt"/>
        <variable name="h" units="second_by_volt"/>
        <variable name="i" units="volt_by_volt"/>
        <variable name="j" units="frog_by_volt"/>
        <variable initial_value="1" name="aCst" units="dimensionless"/>
        <variable initial_value="3" name="bCst" units="second"/>
        <variable initial_value="5" name="cCst" units="volt"/>
        <variable initial_value="7" name="dCst" units="frog"/>
        <variable initial_value="9" name="eCst" units="second"/>
        <variable initial_value="11" name="fCst" units="volt"/>
        <variable initial_value="13" name="gCst" units="frog"/>
        <variable initial_value="15" name="hCst" units="second"/>
        <variable initial_value="17" name="iCst" units="volt"/>
        <variable initial_value="19" name="jCst" units="frog"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>a</ci>
                <apply>
                    <times/>
                    <ci>aCst</ci>
                    <cn cellml:units="dimensionless">1</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>b</ci>
                <apply>
                    <times/>
                    <ci>bCst</ci>
                    <cn cellml:units="dimensionless">3</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>c</ci>
                <apply>
                    <times/>
                    <ci>cCst</ci>
                    <cn cellml:units="dimensionless">5</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>d</ci>
                <apply>
                    <times/>
                    <ci>dCst</ci>
                    <cn cellml:units="dimensionless">7</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>e</ci>
                <apply>
                    <times/>
                    <ci>eCst</ci>
                    <cn cellml:units="dimensionless">9</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>f</ci>
                <apply>
                    <times/>
                    <ci>fCst</ci>
                    <cn cellml:units="dimensionless">11</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>g</ci>
                <apply>
                    <times/>
                    <ci>gCst</ci>
                    <cn cellml:units="dimensionless">13</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>h</ci>
                <apply>
                    <times/>
                    <ci>hCst</ci>
                    <cn cellml:units="volt">15</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>i</ci>
                <apply>
                    <times/>
                    <ci>iCst</ci>
                    <cn cellml:units="volt">17</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>j</ci>
                <apply>
                    <times/>
                    <ci>jCst</ci>
                    <cn cellml:units="volt">19</cn>
                </apply>
            </apply>
        </math>
    </component>
</model>
