<?xml version='1.0' encoding='UTF-8'?>
<model name="validate_units_multiplier_in_model" xmlns="http://www.cellml.org/cellml/2.0#" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
    <units name="millivolt">
        <unit prefix="milli" units="volt"/>
    </units>
    <units name="kilo_microvolt">
        <unit multiplier="1000.0" prefix="micro" units="volt"/>
    </units>
    <units name="root_volt">
        <unit exponent="0.5" units="volt"/>
    </units>
    <component name="simple_checks">
        <variable name="i" units="millivolt"/>
        <variable name="j" units="millivolt"/>
        <variable name="k" units="millivolt"/>
        <variable initial_value="1" name="a" units="millivolt"/>
        <variable initial_value="2" name="b" units="kilo_microvolt"/>
        <variable initial_value="3" name="c" units="root_volt"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>i</ci>
                <apply>
                    <plus/>
                    <ci>a</ci>
                    <ci>b</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>j</ci>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">1000</cn>
                    <ci>a</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>k</ci>
                <apply>
                    <divide/>
                    <apply>
                        <power/>
                        <apply>
                            <root/>
                            <ci>c</ci>
                        </apply>
                        <cn cellml:units="dimensionless">4</cn>
                    </apply>
                    <cn cellml:units="dimensionless">100</cn>
                </apply>
            </apply>
        </math>
    </component>
    <component name="complex_checks">
        <variable name="t" units="second"/>
        <variable name="i" units="millivolt"/>
        <variable name="j" units="millivolt"/>
        <variable name="k" units="volt"/>
        <variable initial_value="4" name="l" units="millivolt"/>
        <variable initial_value="5" name="m" units="millivolt"/>
        <variable name="n" units="volt"/>
        <variable name="o" units="millivolt"/>
        <variable initial_value="1" name="a" units="millivolt"/>
        <variable initial_value="2" name="b" units="kilo_microvolt"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>i</ci>
                <apply>
                    <times/>
                    <ci>a</ci>
                    <apply>
                        <tan/>
                        <pi/>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>j</ci>
                <apply>
                    <times/>
                    <ci>a</ci>
                    <apply>
                        <tan/>
                        <cn cellml:units="dimensionless">1000</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>k</ci>
                <apply>
                    <times/>
                    <apply>
                        <divide/>
                        <apply>
                            <times/>
                            <apply>
                                <log/>
                                <logbase>
                                    <cn cellml:units="dimensionless">10</cn>
                                </logbase>
                                <cn cellml:units="dimensionless">1000</cn>
                            </apply>
                            <apply>
                                <power/>
                                <ci>b</ci>
                                <cn cellml:units="dimensionless">2</cn>
                            </apply>
                        </apply>
                        <apply>
                            <times/>
                            <ci>b</ci>
                            <cn cellml:units="dimensionless">3</cn>
                        </apply>
                    </apply>
                    <cn cellml:units="dimensionless">1000</cn>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>l</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <apply>
                            <log/>
                            <logbase>
                                <cn cellml:units="dimensionless">10</cn>
                            </logbase>
                            <cn cellml:units="dimensionless">1000</cn>
                        </apply>
                        <ci>a</ci>
                    </apply>
                    <ci>t</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>m</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>a</ci>
                        <apply>
                            <exp/>
                            <cn cellml:units="dimensionless">5</cn>
                        </apply>
                    </apply>
                    <ci>t</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>n</ci>
                <apply>
                    <divide/>
                    <apply>
                        <power/>
                        <apply>
                            <times/>
                            <cn cellml:units="dimensionless">10000</cn>
                            <ci>a</ci>
                        </apply>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                    <ci>a</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>o</ci>
                <apply>
                    <root/>
                    <degree>
                        <cn cellml:units="dimensionless">3</cn>
                    </degree>
                    <ci>a</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
