<?xml version='1.0' encoding='UTF-8'?>
<model name="validate_units_in_model" xmlns="http://www.cellml.org/cellml/2.0#" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
    <units name="volt_per_farad">
        <unit units="volt"/>
        <unit exponent="-1" units="farad"/>
    </units>
    <units name="metre_per_second">
        <unit units="metre"/>
        <unit exponent="-1" units="second"/>
    </units>
    <units name="apple"/>
    <units name="milliapple">
        <unit prefix="milli" units="apple"/>
    </units>
    <units name="apple_and_milliapple">
        <unit units="apple"/>
        <unit units="milliapple"/>
    </units>
    <!-- Simple checks for direct comparison of operator behaviour (plus, minus. equals, less than, etc.). -->
    <component name="direct_comparison_operators">
        <variable name="i" units="volt_per_farad"/>
        <variable name="j" units="metre_per_second"/>
        <variable name="k" units="metre_per_second"/>
        <variable initial_value="1" name="a" units="metre_per_second"/>
        <variable initial_value="2" name="b" units="metre_per_second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <!-- Invalid: we have a unit mismatch between i and a+b. -->
                <eq/>
                <ci>i</ci>
                <apply>
                    <plus/>
                    <ci>a</ci>
                    <ci>b</ci>
                </apply>
            </apply>
            <apply>
                <!-- Invalid: the exponent for b creates a mismatch.-->
                <eq/>
                <ci>j</ci>
                <apply>
                    <plus/>
                    <ci>a</ci>
                    <apply>
                        <power/>
                        <ci>b</ci>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <!-- Valid. -->
                <eq/>
                <ci>k</ci>
                <apply>
                    <plus/>
                    <ci>a</ci>
                    <ci>b</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="trigonometric_operators">
        <variable name="i" units="dimensionless"/>
        <variable name="j" units="dimensionless"/>
        <variable initial_value="1" name="a" units="second"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <!-- Invalid: trigonometric operators only take dimensionless arguments. -->
                <eq/>
                <ci>i</ci>
                <apply>
                    <tan/>
                    <ci>a</ci>
                </apply>
            </apply>
            <apply>
                <!-- Valid. -->
                <eq/>
                <ci>j</ci>
                <apply>
                    <tan/>
                    <apply>
                        <divide/>
                        <ci>a</ci>
                        <ci>a</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
    <component name="logarithmic_operators">
        <variable name="i" units="dimensionless"/>
        <variable name="j" units="dimensionless"/>
        <variable name="k" units="dimensionless"/>
        <variable initial_value="1" name="a" units="second"/>
        <variable initial_value="2" name="b" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <!-- Invalid: mismatch in the base and actual logarithm. -->
                <eq/>
                <ci>i</ci>
                <apply>
                    <log/>
                    <logbase>
                        <cn cellml:units="dimensionless">2</cn>
                    </logbase>
                    <ci>a</ci>
                </apply>
            </apply>
            <apply>
                <!-- Valid. -->
                <eq/>
                <ci>j</ci>
                <apply>
                    <log/>
                    <logbase>
                        <cn cellml:units="second">2</cn>
                    </logbase>
                    <ci>a</ci>
                </apply>
            </apply>
            <apply>
                <!-- Valid. -->
                <eq/>
                <ci>k</ci>
                <apply>
                    <log/>
                    <logbase>
                        <cn cellml:units="dimensionless">2</cn>
                    </logbase>
                    <ci>b</ci>
                </apply>
            </apply>
        </math>
    </component>
    <component name="power_root_operators">
        <variable name="i" units="volt_per_farad"/>
        <variable name="j" units="volt_per_farad"/>
        <variable name="k" units="dimensionless"/>
        <variable name="l" units="dimensionless"/>
        <variable initial_value="1" name="a" units="volt_per_farad"/>
        <variable initial_value="2" name="b" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <!-- Valid. -->
                <eq/>
                <ci>i</ci>
                <apply>
                    <root/>
                    <apply>
                        <power/>
                        <ci>a</ci>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <!-- Valid. -->
                <eq/>
                <ci>j</ci>
                <apply>
                    <root/>
                    <apply>
                        <power/>
                        <ci>a</ci>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                </apply>
            </apply>
            <apply>
                <!-- Valid: both e and b are dimensionless, although b is not a constant. -->
                <eq/>
                <ci>k</ci>
                <apply>
                    <exp/>
                    <ci>b</ci>
                </apply>
            </apply>
            <apply>
                <!-- Invalid: 2 is not dimensionless. -->
                <eq/>
                <ci>l</ci>
                <apply>
                    <power/>
                    <ci>a</ci>
                    <cn cellml:units="second">2</cn>
                </apply>
            </apply>
        </math>
    </component>
    <component name="non_standard_units">
        <variable name="t" units="second"/>
        <variable name="i" units="milliapple"/>
        <variable name="j" units="apple_and_milliapple"/>
        <variable initial_value="1" name="a" units="apple"/>
        <variable initial_value="2" name="b" units="milliapple"/>
        <variable initial_value="3" name="c" units="apple_and_milliapple"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <!-- Valid. -->
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>i</ci>
                </apply>
                <apply>
                    <divide/>
                    <apply>
                        <times/>
                        <ci>a</ci>
                        <ci>b</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>a</ci>
                        <ci>t</ci>
                    </apply>
                </apply>
            </apply>
            <!-- Coverage for nested base units that are not standard. -->
            <apply>
                <eq/>
                <ci>j</ci>
                <ci>c</ci>
            </apply>
        </math>
    </component>
</model>
