def model coverage as
  def unit per_second as
    unit second {expo: -1};
  enddef;

  def comp dummy_component as
  enddef;

  def comp dummy_top_component as
  enddef;

  def comp dummy_bottom_component as
  enddef;

  def comp my_component as
    var x: dimensionless {init: 0};
    var t: second;
    var eqnEq: dimensionless;
    var eqnEqCoverageParentheses: dimensionless;
    var eqnNeq: dimensionless;
    var eqnNeqCoverageParentheses: dimensionless;
    var eqnLt: dimensionless;
    var eqnLtCoverageParentheses: dimensionless;
    var eqnLeq: dimensionless;
    var eqnLeqCoverageParentheses: dimensionless;
    var eqnGt: dimensionless;
    var eqnGtCoverageParentheses: dimensionless;
    var eqnGeq: dimensionless;
    var eqnGeqCoverageParentheses: dimensionless;
    var eqnAnd: dimensionless;
    var eqnAndMultiple: dimensionless;
    var eqnAndParentheses: dimensionless;
    var eqnAndParenthesesLeftPlusWith: dimensionless;
    var eqnAndParenthesesLeftPlusWithout: dimensionless;
    var eqnAndParenthesesLeftMinusWith: dimensionless;
    var eqnAndParenthesesLeftMinusWithout: dimensionless;
    var eqnAndParenthesesLeftPower: dimensionless;
    var eqnAndParenthesesLeftRoot: dimensionless;
    var eqnAndParenthesesRightPlusWith: dimensionless;
    var eqnAndParenthesesRightPlusWithout: dimensionless;
    var eqnAndParenthesesRightMinusWith: dimensionless;
    var eqnAndParenthesesRightMinusWithout: dimensionless;
    var eqnAndParenthesesRightPower: dimensionless;
    var eqnAndParenthesesRightRoot: dimensionless;
    var eqnAndCoverageParentheses: dimensionless;
    var eqnOr: dimensionless;
    var eqnOrMultiple: dimensionless;
    var eqnOrParentheses: dimensionless;
    var eqnOrParenthesesLeftPlusWith: dimensionless;
    var eqnOrParenthesesLeftPlusWithout: dimensionless;
    var eqnOrParenthesesLeftMinusWith: dimensionless;
    var eqnOrParenthesesLeftMinusWithout: dimensionless;
    var eqnOrParenthesesLeftPower: dimensionless;
    var eqnOrParenthesesLeftRoot: dimensionless;
    var eqnOrParenthesesRightPlusWith: dimensionless;
    var eqnOrParenthesesRightPlusWithout: dimensionless;
    var eqnOrParenthesesRightMinusWith: dimensionless;
    var eqnOrParenthesesRightMinusWithout: dimensionless;
    var eqnOrParenthesesRightPower: dimensionless;
    var eqnOrParenthesesRightRoot: dimensionless;
    var eqnOrCoverageParentheses: dimensionless;
    var eqnXor: dimensionless;
    var eqnXorMultiple: dimensionless;
    var eqnXorParentheses: dimensionless;
    var eqnXorParenthesesLeftPlusWith: dimensionless;
    var eqnXorParenthesesLeftPlusWithout: dimensionless;
    var eqnXorParenthesesLeftMinusWith: dimensionless;
    var eqnXorParenthesesLeftMinusWithout: dimensionless;
    var eqnXorParenthesesLeftPower: dimensionless;
    var eqnXorParenthesesLeftRoot: dimensionless;
    var eqnXorParenthesesRightPlusWith: dimensionless;
    var eqnXorParenthesesRightPlusWithout: dimensionless;
    var eqnXorParenthesesRightMinusWith: dimensionless;
    var eqnXorParenthesesRightMinusWithout: dimensionless;
    var eqnXorParenthesesRightPower: dimensionless;
    var eqnXorParenthesesRightRoot: dimensionless;
    var eqnXorCoverageParentheses: dimensionless;
    var eqnNot: dimensionless;
    var eqnPlus: dimensionless;
    var eqnPlusMultiple: dimensionless;
    var eqnPlusParentheses: dimensionless;
    var eqnPlusUnary: dimensionless;
    var eqnMinus: dimensionless;
    var eqnMinusParentheses: dimensionless;
    var eqnMinusParenthesesPlusWith: dimensionless;
    var eqnMinusParenthesesPlusWithout: dimensionless;
    var eqnMinusUnary: dimensionless;
    var eqnMinusUnaryParentheses: dimensionless;
    var eqnTimes: dimensionless;
    var eqnTimesMultiple: dimensionless;
    var eqnTimesParentheses: dimensionless;
    var eqnTimesParenthesesLeftPlusWith: dimensionless;
    var eqnTimesParenthesesLeftPlusWithout: dimensionless;
    var eqnTimesParenthesesLeftMinusWith: dimensionless;
    var eqnTimesParenthesesLeftMinusWithout: dimensionless;
    var eqnTimesParenthesesRightPlusWith: dimensionless;
    var eqnTimesParenthesesRightPlusWithout: dimensionless;
    var eqnTimesParenthesesRightMinusWith: dimensionless;
    var eqnTimesParenthesesRightMinusWithout: dimensionless;
    var eqnDivide: dimensionless;
    var eqnDivideParentheses: dimensionless;
    var eqnDivideParenthesesLeftPlusWith: dimensionless;
    var eqnDivideParenthesesLeftPlusWithout: dimensionless;
    var eqnDivideParenthesesLeftMinusWith: dimensionless;
    var eqnDivideParenthesesLeftMinusWithout: dimensionless;
    var eqnDivideParenthesesRightPlusWith: dimensionless;
    var eqnDivideParenthesesRightPlusWithout: dimensionless;
    var eqnDivideParenthesesRightMinusWith: dimensionless;
    var eqnDivideParenthesesRightMinusWithout: dimensionless;
    var eqnDivideParenthesesRightTimes: dimensionless;
    var eqnDivideParenthesesRightDivide: dimensionless;
    var eqnPowerSqrt: dimensionless;
    var eqnPowerSqr: dimensionless;
    var eqnPowerCube: dimensionless;
    var eqnPowerCi: dimensionless;
    var eqnPowerParentheses: dimensionless;
    var eqnPowerParenthesesLeftPlusWith: dimensionless;
    var eqnPowerParenthesesLeftPlusWithout: dimensionless;
    var eqnPowerParenthesesLeftMinusWith: dimensionless;
    var eqnPowerParenthesesLeftMinusWithout: dimensionless;
    var eqnPowerParenthesesLeftTimes: dimensionless;
    var eqnPowerParenthesesLeftDivide: dimensionless;
    var eqnPowerParenthesesRightPlusWith: dimensionless;
    var eqnPowerParenthesesRightPlusWithout: dimensionless;
    var eqnPowerParenthesesRightMinusWith: dimensionless;
    var eqnPowerParenthesesRightMinusWithout: dimensionless;
    var eqnPowerParenthesesRightTimes: dimensionless;
    var eqnPowerParenthesesRightDivide: dimensionless;
    var eqnPowerParenthesesRightPower: dimensionless;
    var eqnPowerParenthesesRightRoot: dimensionless;
    var eqnRootSqrt: dimensionless;
    var eqnRootSqrtOther: dimensionless;
    var eqnRootCube: dimensionless;
    var eqnRootCi: dimensionless;
    var eqnRootParentheses: dimensionless;
    var eqnRootParenthesesLeftPlusWith: dimensionless;
    var eqnRootParenthesesLeftPlusWithout: dimensionless;
    var eqnRootParenthesesLeftMinusWith: dimensionless;
    var eqnRootParenthesesLeftMinusWithout: dimensionless;
    var eqnRootParenthesesLeftTimes: dimensionless;
    var eqnRootParenthesesLeftDivide: dimensionless;
    var eqnRootParenthesesRightPlusWith: dimensionless;
    var eqnRootParenthesesRightPlusWithout: dimensionless;
    var eqnRootParenthesesRightMinusWith: dimensionless;
    var eqnRootParenthesesRightMinusWithout: dimensionless;
    var eqnRootParenthesesRightTimes: dimensionless;
    var eqnRootParenthesesRightDivide: dimensionless;
    var eqnRootParenthesesRightPower: dimensionless;
    var eqnRootParenthesesRightRoot: dimensionless;
    var eqnAbs: dimensionless;
    var eqnExp: dimensionless;
    var eqnLn: dimensionless;
    var eqnLog: dimensionless;
    var eqnLog2: dimensionless;
    var eqnLog10: dimensionless;
    var eqnLogCi: dimensionless;
    var eqnCeiling: dimensionless;
    var eqnFloor: dimensionless;
    var eqnMin: dimensionless;
    var eqnMinMultiple: dimensionless;
    var eqnMax: dimensionless;
    var eqnMaxMultiple: dimensionless;
    var eqnRem: dimensionless;
    var eqnSin: dimensionless;
    var eqnCos: dimensionless;
    var eqnTan: dimensionless;
    var eqnSec: dimensionless;
    var eqnCsc: dimensionless;
    var eqnCot: dimensionless;
    var eqnSinh: dimensionless;
    var eqnCosh: dimensionless;
    var eqnTanh: dimensionless;
    var eqnSech: dimensionless;
    var eqnCsch: dimensionless;
    var eqnCoth: dimensionless;
    var eqnArcsin: dimensionless;
    var eqnArccos: dimensionless;
    var eqnArctan: dimensionless;
    var eqnArcsec: dimensionless;
    var eqnArccsc: dimensionless;
    var eqnArccot: dimensionless;
    var eqnArcsinh: dimensionless;
    var eqnArccosh: dimensionless;
    var eqnArctanh: dimensionless;
    var eqnArcsech: dimensionless;
    var eqnArccsch: dimensionless;
    var eqnArccoth: dimensionless;
    var eqnPiecewisePiece: dimensionless;
    var eqnPiecewisePieceOtherwise: dimensionless;
    var eqnPiecewisePiecePiecePiece: dimensionless;
    var eqnPiecewisePiecePiecePieceOtherwise: dimensionless;
    var eqnWithPiecewise: dimensionless;
    var eqnCnInteger: dimensionless;
    var eqnCnDouble: dimensionless;
    var eqnCnIntegerWithExponent: dimensionless;
    var eqnCnDoubleWithExponent: dimensionless;
    var eqnCi: dimensionless;
    var eqnTrue: dimensionless;
    var eqnFalse: dimensionless;
    var eqnExponentiale: dimensionless;
    var eqnPi: dimensionless;
    var eqnInfinity: dimensionless;
    var eqnNotanumber: dimensionless;
    var eqnCoverageForPlusOperator: dimensionless;
    var eqnCoverageForMinusOperator: dimensionless;
    var eqnCoverageForTimesOperator: dimensionless;
    var eqnCoverageForDivideOperator: dimensionless;
    var eqnCoverageForAndOperator: dimensionless;
    var eqnCoverageForOrOperator: dimensionless;
    var eqnCoverageForXorOperator: dimensionless;
    var eqnCoverageForPowerOperator: dimensionless;
    var eqnCoverageForRootOperator: dimensionless;
    var eqnCoverageForMinusUnary: dimensionless;
    var eqnNlaVariable1: dimensionless {init: 1};
    var eqnNlaVariable2: dimensionless {init: 2};
    var eqnComputedConstant1: dimensionless;
    var eqnComputedConstant2: dimensionless;
    var m: dimensionless {init: 1};
    var n: dimensionless {init: 2};
    var o: dimensionless {init: 3};
    var p: dimensionless {init: 4};
    var q: dimensionless {init: 5};
    var r: dimensionless {init: 6};
    var s: dimensionless {init: 7};
    // A non-MathML node needed for our coverage test.
    ode(x, t) = 1{per_second};
    eqnEq = m == n;
    eqnEqCoverageParentheses = m/(n == n);
    eqnNeq = m <> n;
    eqnNeqCoverageParentheses = m/(n <> o);
    eqnLt = m < n;
    eqnLtCoverageParentheses = m/(n < o);
    eqnLeq = m <= n;
    eqnLeqCoverageParentheses = m/(n <= o);
    eqnGt = m > n;
    eqnGtCoverageParentheses = m/(n > o);
    eqnGeq = m >= n;
    eqnGeqCoverageParentheses = m/(n >= o);
    eqnAnd = m and n;
    eqnAndMultiple = m and n and o;
    eqnAndParentheses = (m < n) and (o > p);
    eqnAndParenthesesLeftPlusWith = m+n and (o > p);
    eqnAndParenthesesLeftPlusWithout = +m and (n > o);
    eqnAndParenthesesLeftMinusWith = m-n and (o > p);
    eqnAndParenthesesLeftMinusWithout = -m and (n > o);
    eqnAndParenthesesLeftPower = pow(m, n) and (o > p);
    eqnAndParenthesesLeftRoot = root(m, n) and (o > p);
    eqnAndParenthesesRightPlusWith = (m < n) and o+p;
    eqnAndParenthesesRightPlusWithout = (m < n) and +o;
    eqnAndParenthesesRightMinusWith = (m < n) and o-p;
    eqnAndParenthesesRightMinusWithout = (m < n) and -o;
    eqnAndParenthesesRightPower = (m < n) and pow(o, p);
    eqnAndParenthesesRightRoot = (m < n) and root(o, p);
    eqnAndCoverageParentheses = m/(n and o);
    eqnOr = m or n;
    eqnOrMultiple = m or n or o;
    eqnOrParentheses = (m < n) or (o > p);
    eqnOrParenthesesLeftPlusWith = m+n or (o > p);
    eqnOrParenthesesLeftPlusWithout = +m or (n > o);
    eqnOrParenthesesLeftMinusWith = m-n or (o > p);
    eqnOrParenthesesLeftMinusWithout = -m or (n > o);
    eqnOrParenthesesLeftPower = pow(m, n) or (o > p);
    eqnOrParenthesesLeftRoot = root(m, n) or (o > p);
    eqnOrParenthesesRightPlusWith = (m < n) or o+p;
    eqnOrParenthesesRightPlusWithout = (m < n) or +o;
    eqnOrParenthesesRightMinusWith = (m < n) or o-p;
    eqnOrParenthesesRightMinusWithout = (m < n) or -o;
    eqnOrParenthesesRightPower = (m < n) or pow(o, p);
    eqnOrParenthesesRightRoot = (m < n) or root(o, p);
    eqnOrCoverageParentheses = m/(n or o);
    eqnXor = m xor n;
    eqnXorMultiple = m xor n xor o;
    eqnXorParentheses = (m < n) xor (o > p);
    eqnXorParenthesesLeftPlusWith = m+n xor (o > p);
    eqnXorParenthesesLeftPlusWithout = +m xor (n > o);
    eqnXorParenthesesLeftMinusWith = m-n xor (o > p);
    eqnXorParenthesesLeftMinusWithout = -m xor (n > o);
    eqnXorParenthesesLeftPower = pow(m, n) xor (o > p);
    eqnXorParenthesesLeftRoot = root(m, n) xor (o > p);
    eqnXorParenthesesRightPlusWith = (m < n) xor o+p;
    eqnXorParenthesesRightPlusWithout = (m < n) xor +o;
    eqnXorParenthesesRightMinusWith = (m < n) xor o-p;
    eqnXorParenthesesRightMinusWithout = (m < n) xor -o;
    eqnXorParenthesesRightPower = (m < n) xor pow(o, p);
    eqnXorParenthesesRightRoot = (m < n) xor root(o, p);
    eqnXorCoverageParentheses = m/(n xor o);
    eqnNot = not m;
    eqnPlus = m+n;
    eqnPlusMultiple = m+n+o;
    eqnPlusParentheses = (m < n)+(o > p);
    eqnPlusUnary = +m;
    eqnMinus = m-n;
    eqnMinusParentheses = (m < n)-(o > p);
    eqnMinusParenthesesPlusWith = (m < n)-(o+p);
    eqnMinusParenthesesPlusWithout = (m < n)-(+o);
    eqnMinusUnary = -m;
    eqnMinusUnaryParentheses = -(m < n);
    eqnTimes = m*n;
    eqnTimesMultiple = m*n*o;
    eqnTimesParentheses = (m < n)*(o > p);
    eqnTimesParenthesesLeftPlusWith = (m+n)*(o > p);
    eqnTimesParenthesesLeftPlusWithout = +m*(n > o);
    eqnTimesParenthesesLeftMinusWith = (m-n)*(o > p);
    eqnTimesParenthesesLeftMinusWithout = -m*(n > o);
    eqnTimesParenthesesRightPlusWith = (m < n)*(o+p);
    eqnTimesParenthesesRightPlusWithout = (m < n)*(+o);
    eqnTimesParenthesesRightMinusWith = (m < n)*(o-p);
    eqnTimesParenthesesRightMinusWithout = (m < n)*(-o);
    eqnDivide = m/n;
    eqnDivideParentheses = (m < n)/(p > o);
    eqnDivideParenthesesLeftPlusWith = (m+n)/(p > o);
    eqnDivideParenthesesLeftPlusWithout = +m/(o > n);
    eqnDivideParenthesesLeftMinusWith = (m-n)/(p > o);
    eqnDivideParenthesesLeftMinusWithout = -m/(o > n);
    eqnDivideParenthesesRightPlusWith = (m < n)/(o+p);
    eqnDivideParenthesesRightPlusWithout = (m < n)/(+o);
    eqnDivideParenthesesRightMinusWith = (m < n)/(o-p);
    eqnDivideParenthesesRightMinusWithout = (m < n)/(-o);
    eqnDivideParenthesesRightTimes = (m < n)/(o*p);
    eqnDivideParenthesesRightDivide = (m < n)/(o/p);
    eqnPowerSqrt = pow(m, 0.5{dimensionless});
    eqnPowerSqr = sqr(m);
    eqnPowerCube = pow(m, 3{dimensionless});
    eqnPowerCi = pow(m, n);
    eqnPowerParentheses = pow(m <= n, o >= p);
    eqnPowerParenthesesLeftPlusWith = pow(m+n, o >= p);
    eqnPowerParenthesesLeftPlusWithout = pow(+m, n >= o);
    eqnPowerParenthesesLeftMinusWith = pow(m-n, o >= p);
    eqnPowerParenthesesLeftMinusWithout = pow(-m, n >= o);
    eqnPowerParenthesesLeftTimes = pow(m*n, o >= p);
    eqnPowerParenthesesLeftDivide = pow(m/n, o >= p);
    eqnPowerParenthesesRightPlusWith = pow(m <= n, o+p);
    eqnPowerParenthesesRightPlusWithout = pow(m <= n, +o);
    eqnPowerParenthesesRightMinusWith = pow(m <= n, o-p);
    eqnPowerParenthesesRightMinusWithout = pow(m <= n, -o);
    eqnPowerParenthesesRightTimes = pow(m <= n, o*p);
    eqnPowerParenthesesRightDivide = pow(m <= n, o/p);
    eqnPowerParenthesesRightPower = pow(m <= n, pow(o, p));
    eqnPowerParenthesesRightRoot = pow(m <= n, root(o, p));
    eqnRootSqrt = sqrt(m);
    eqnRootSqrtOther = root(m, 2{dimensionless});
    eqnRootCube = root(m, 3{dimensionless});
    eqnRootCi = root(m, n);
    eqnRootParentheses = root(m < n, p > o);
    eqnRootParenthesesLeftPlusWith = root(m+n, p > o);
    eqnRootParenthesesLeftPlusWithout = root(+m, o > n);
    eqnRootParenthesesLeftMinusWith = root(m-n, p > o);
    eqnRootParenthesesLeftMinusWithout = root(-m, o > n);
    eqnRootParenthesesLeftTimes = root(m*n, p > o);
    eqnRootParenthesesLeftDivide = root(m/n, p > o);
    eqnRootParenthesesRightPlusWith = root(m < n, o+p);
    eqnRootParenthesesRightPlusWithout = root(m < n, +o);
    eqnRootParenthesesRightMinusWith = root(m < n, o-p);
    eqnRootParenthesesRightMinusWithout = root(m < n, -o);
    eqnRootParenthesesRightTimes = root(m < n, o*p);
    eqnRootParenthesesRightDivide = root(m < n, o/p);
    eqnRootParenthesesRightPower = root(m < n, pow(o, p));
    eqnRootParenthesesRightRoot = root(m < n, root(o, p));
    eqnAbs = abs(m);
    eqnExp = exp(m);
    eqnLn = ln(m);
    eqnLog = log(m);
    eqnLog2 = log(m, 2{dimensionless});
    eqnLog10 = log(m, 10{dimensionless});
    eqnLogCi = log(m, n);
    eqnCeiling = ceil(m);
    eqnFloor = floor(m);
    eqnMin = min(m, n);
    eqnMinMultiple = min(m, n, o);
    eqnMax = max(m, n);
    eqnMaxMultiple = max(m, n, o);
    eqnRem = rem(m, n);
    eqnSin = sin(m);
    eqnCos = cos(m);
    eqnTan = tan(m);
    eqnSec = sec(m);
    eqnCsc = csc(m);
    eqnCot = cot(m);
    eqnSinh = sinh(m);
    eqnCosh = cosh(m);
    eqnTanh = tanh(m);
    eqnSech = sech(m);
    eqnCsch = csch(m);
    eqnCoth = coth(m);
    eqnArcsin = asin(m);
    eqnArccos = acos(m);
    eqnArctan = atan(m);
    eqnArcsec = asec(m);
    eqnArccsc = acsc(m);
    eqnArccot = acot(m);
    eqnArcsinh = asinh(m);
    eqnArccosh = acosh(m);
    eqnArctanh = atanh(m/2{dimensionless});
    eqnArcsech = asech(m);
    eqnArccsch = acsch(m);
    eqnArccoth = acoth(2{dimensionless}*m);
    eqnPiecewisePiece = sel
      case m > n:
        m;
    endsel;
    eqnPiecewisePieceOtherwise = sel
      case m > n:
        m;
      otherwise:
        o;
    endsel;
    eqnPiecewisePiecePiecePiece = sel
      case m > n:
        m;
      case o > p:
        o;
      case q > r:
        q;
    endsel;
    eqnPiecewisePiecePiecePieceOtherwise = sel
      case m > n:
        m;
      case o > p:
        o;
      case q > r:
        q;
      otherwise:
        s;
    endsel;
    eqnWithPiecewise = 123{dimensionless}+sel(case m > n: m);
    eqnCnInteger = 123{dimensionless};
    eqnCnDouble = 123.456789{dimensionless};
    eqnCnIntegerWithExponent = 123e99{dimensionless};
    eqnCnDoubleWithExponent = 123.456789e99{dimensionless};
    eqnCi = m;
    eqnTrue = true;
    eqnFalse = false;
    eqnExponentiale = e;
    eqnPi = pi;
    eqnInfinity = inf;
    eqnNotanumber = nan;
    eqnCoverageForPlusOperator = (m and n)+sel(case o > p: n)+q+(r and s);
    eqnCoverageForMinusOperator = (m and n)-(sel(case o > p: n)-(q-sel(case o > p: n)))-(r and s);
    eqnCoverageForTimesOperator = (m and n)*(sel(case o > p: n)*(q*sel(case o > p: n)))*(r and s);
    eqnCoverageForDivideOperator = (m and n)/(sel(case o > p: n)/(q/sel(case o > p: n)));
    eqnCoverageForAndOperator = (m or n) and ((m xor n) and (sel(case o > p: n) and (((q and sel(case o > p: n)) and (m xor n)) and (m or n))));
    eqnCoverageForOrOperator = (m and n) or ((m xor n) or (sel(case o > p: n) or (((q or sel(case o > p: n)) or (m xor n)) or (m and n))));
    eqnCoverageForXorOperator = (m and n) xor ((m or n) xor (sel(case o > p: n) xor (((q xor sel(case o > p: n)) xor (m or n)) xor (m and n))));
    eqnCoverageForPowerOperator = pow(m and n, pow(sel(case o > p: n), pow(pow(q, sel(case o > p: n)), m and n)));
    eqnCoverageForRootOperator = root(root(root(m and n, root(sel(case o > p: n), q)), sel(case o > p: n)), m and n);
    eqnCoverageForMinusUnary = -(m and n)+(-sel(case o > p: n));
    eqnNlaVariable1+eqnNlaVariable2+x = 0{dimensionless};
    eqnNlaVariable1-eqnNlaVariable2 = eqnComputedConstant1+eqnComputedConstant2;
    eqnComputedConstant1 = 1{dimensionless};
    eqnComputedConstant2 = 3{dimensionless};
  enddef;
  def group as encapsulation for
    comp dummy_top_component incl
      comp dummy_bottom_component;
      comp my_component;
    endcomp;
  enddef;
enddef;
