<?xml version='1.0' encoding='UTF-8'?>
<model name="my_model" xmlns="http://www.cellml.org/cellml/2.0#" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
    <!-- Define the VOI as being time (expressed in milliseconds). Then:
 - Use the VOI as-is (i.e. time expressed in milliseconds) in a component to compute an ODE; and
 - Use a scaled version of the VOI (here, time expressed in seconds) in a component to compute an ODE. -->
    <units name="ms">
        <unit prefix="milli" units="second"/>
    </units>
    <units name="mM">
        <unit prefix="milli" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="mM_per_s">
        <unit units="mM"/>
        <unit exponent="-1" units="second"/>
    </units>
    <units name="mM_per_ms">
        <unit units="mM"/>
        <unit exponent="-1" units="ms"/>
    </units>
    <component name="environment">
        <variable interface="public" name="t" units="ms"/>
    </component>
    <component name="t_in_ms">
        <variable interface="public" name="t" units="ms"/>
        <variable initial_value="3" name="x" units="mM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>x</ci>
                </apply>
                <cn cellml:units="mM_per_ms">5</cn>
            </apply>
        </math>
    </component>
    <component name="t_in_s">
        <variable interface="public" name="t" units="second"/>
        <variable initial_value="7" name="x" units="mM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>x</ci>
                </apply>
                <cn cellml:units="mM_per_s">9</cn>
            </apply>
        </math>
    </component>
    <connection component_1="environment" component_2="t_in_ms">
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
    <connection component_1="environment" component_2="t_in_s">
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
</model>
