def model coverage as
  def unit per_second as
    unit second {expo: -1};
  enddef;

  def comp dummy_component as
  enddef;

  def comp dummy_top_component as
  enddef;

  def comp dummy_bottom_component as
  enddef;

  def comp my_component as
    var x: dimensionless {init: 0};
    var t: second;
    var eqnEq: dimensionless;
    var eqnEqCoverageParentheses: dimensionless;
    var eqnNeq: dimensionless;
    var eqnNeqCoverageParentheses: dimensionless;
    var eqnLt: dimensionless;
    var eqnLeq: dimensionless;
    var eqnGt: dimensionless;
    var eqnGeq: dimensionless;
    var eqnAnd: dimensionless;
    var eqnAndMultiple: dimensionless;
    var eqnAndParentheses: dimensionless;
    var eqnAndParenthesesLeftPlusWith: dimensionless;
    var eqnAndParenthesesLeftPlusWithout: dimensionless;
    var eqnAndParenthesesLeftMinusWith: dimensionless;
    var eqnAndParenthesesLeftMinusWithout: dimensionless;
    var eqnAndParenthesesLeftPower: dimensionless;
    var eqnAndParenthesesLeftRoot: dimensionless;
    var eqnAndParenthesesRightPlusWith: dimensionless;
    var eqnAndParenthesesRightPlusWithout: dimensionless;
    var eqnAndParenthesesRightMinusWith: dimensionless;
    var eqnAndParenthesesRightMinusWithout: dimensionless;
    var eqnAndParenthesesRightPower: dimensionless;
    var eqnAndParenthesesRightRoot: dimensionless;
    var eqnOr: dimensionless;
    var eqnOrMultiple: dimensionless;
    var eqnOrParentheses: dimensionless;
    var eqnOrParenthesesLeftPlusWith: dimensionless;
    var eqnOrParenthesesLeftPlusWithout: dimensionless;
    var eqnOrParenthesesLeftMinusWith: dimensionless;
    var eqnOrParenthesesLeftMinusWithout: dimensionless;
    var eqnOrParenthesesLeftPower: dimensionless;
    var eqnOrParenthesesLeftRoot: dimensionless;
    var eqnOrParenthesesRightPlusWith: dimensionless;
    var eqnOrParenthesesRightPlusWithout: dimensionless;
    var eqnOrParenthesesRightMinusWith: dimensionless;
    var eqnOrParenthesesRightMinusWithout: dimensionless;
    var eqnOrParenthesesRightPower: dimensionless;
    var eqnOrParenthesesRightRoot: dimensionless;
    var eqnXor: dimensionless;
    var eqnXorMultiple: dimensionless;
    var eqnXorParentheses: dimensionless;
    var eqnXorParenthesesLeftPlusWith: dimensionless;
    var eqnXorParenthesesLeftPlusWithout: dimensionless;
    var eqnXorParenthesesLeftMinusWith: dimensionless;
    var eqnXorParenthesesLeftMinusWithout: dimensionless;
    var eqnXorParenthesesLeftPower: dimensionless;
    var eqnXorParenthesesLeftRoot: dimensionless;
    var eqnXorParenthesesRightPlusWith: dimensionless;
    var eqnXorParenthesesRightPlusWithout: dimensionless;
    var eqnXorParenthesesRightMinusWith: dimensionless;
    var eqnXorParenthesesRightMinusWithout: dimensionless;
    var eqnXorParenthesesRightPower: dimensionless;
    var eqnXorParenthesesRightRoot: dimensionless;
    var eqnNot: dimensionless;
    var eqnPlus: dimensionless;
    var eqnPlusMultiple: dimensionless;
    var eqnPlusParentheses: dimensionless;
    var eqnPlusUnary: dimensionless;
    var eqnMinus: dimensionless;
    var eqnMinusParentheses: dimensionless;
    var eqnMinusParenthesesPlusWith: dimensionless;
    var eqnMinusParenthesesPlusWithout: dimensionless;
    var eqnMinusUnary: dimensionless;
    var eqnMinusUnaryParentheses: dimensionless;
    var eqnTimes: dimensionless;
    var eqnTimesMultiple: dimensionless;
    var eqnTimesParentheses: dimensionless;
    var eqnTimesParenthesesLeftPlusWith: dimensionless;
    var eqnTimesParenthesesLeftPlusWithout: dimensionless;
    var eqnTimesParenthesesLeftMinusWith: dimensionless;
    var eqnTimesParenthesesLeftMinusWithout: dimensionless;
    var eqnTimesParenthesesRightPlusWith: dimensionless;
    var eqnTimesParenthesesRightPlusWithout: dimensionless;
    var eqnTimesParenthesesRightMinusWith: dimensionless;
    var eqnTimesParenthesesRightMinusWithout: dimensionless;
    var eqnDivide: dimensionless;
    var eqnDivideParentheses: dimensionless;
    var eqnDivideParenthesesLeftPlusWith: dimensionless;
    var eqnDivideParenthesesLeftPlusWithout: dimensionless;
    var eqnDivideParenthesesLeftMinusWith: dimensionless;
    var eqnDivideParenthesesLeftMinusWithout: dimensionless;
    var eqnDivideParenthesesRightPlusWith: dimensionless;
    var eqnDivideParenthesesRightPlusWithout: dimensionless;
    var eqnDivideParenthesesRightMinusWith: dimensionless;
    var eqnDivideParenthesesRightMinusWithout: dimensionless;
    var eqnDivideParenthesesRightTimes: dimensionless;
    var eqnDivideParenthesesRightDivide: dimensionless;
    var eqnPowerSqrt: dimensionless;
    var eqnPowerSqr: dimensionless;
    var eqnPowerCube: dimensionless;
    var eqnPowerCi: dimensionless;
    var eqnPowerParentheses: dimensionless;
    var eqnPowerParenthesesLeftPlusWith: dimensionless;
    var eqnPowerParenthesesLeftPlusWithout: dimensionless;
    var eqnPowerParenthesesLeftMinusWith: dimensionless;
    var eqnPowerParenthesesLeftMinusWithout: dimensionless;
    var eqnPowerParenthesesLeftTimes: dimensionless;
    var eqnPowerParenthesesLeftDivide: dimensionless;
    var eqnPowerParenthesesRightPlusWith: dimensionless;
    var eqnPowerParenthesesRightPlusWithout: dimensionless;
    var eqnPowerParenthesesRightMinusWith: dimensionless;
    var eqnPowerParenthesesRightMinusWithout: dimensionless;
    var eqnPowerParenthesesRightTimes: dimensionless;
    var eqnPowerParenthesesRightDivide: dimensionless;
    var eqnPowerParenthesesRightPower: dimensionless;
    var eqnPowerParenthesesRightRoot: dimensionless;
    var eqnRootSqrt: dimensionless;
    var eqnRootSqrtOther: dimensionless;
    var eqnRootCube: dimensionless;
    var eqnRootCi: dimensionless;
    var eqnRootParentheses: dimensionless;
    var eqnRootParenthesesLeftPlusWith: dimensionless;
    var eqnRootParenthesesLeftPlusWithout: dimensionless;
    var eqnRootParenthesesLeftMinusWith: dimensionless;
    var eqnRootParenthesesLeftMinusWithout: dimensionless;
    var eqnRootParenthesesLeftTimes: dimensionless;
    var eqnRootParenthesesLeftDivide: dimensionless;
    var eqnRootParenthesesRightPlusWith: dimensionless;
    var eqnRootParenthesesRightPlusWithout: dimensionless;
    var eqnRootParenthesesRightMinusWith: dimensionless;
    var eqnRootParenthesesRightMinusWithout: dimensionless;
    var eqnRootParenthesesRightTimes: dimensionless;
    var eqnRootParenthesesRightDivide: dimensionless;
    var eqnRootParenthesesRightPower: dimensionless;
    var eqnRootParenthesesRightRoot: dimensionless;
    var eqnAbs: dimensionless;
    var eqnExp: dimensionless;
    var eqnLn: dimensionless;
    var eqnLog: dimensionless;
    var eqnLog2: dimensionless;
    var eqnLog10: dimensionless;
    var eqnLogCi: dimensionless;
    var eqnCeiling: dimensionless;
    var eqnFloor: dimensionless;
    var eqnMin: dimensionless;
    var eqnMinMultiple: dimensionless;
    var eqnMax: dimensionless;
    var eqnMaxMultiple: dimensionless;
    var eqnRem: dimensionless;
    var eqnSin: dimensionless;
    var eqnCos: dimensionless;
    var eqnTan: dimensionless;
    var eqnSec: dimensionless;
    var eqnCsc: dimensionless;
    var eqnCot: dimensionless;
    var eqnSinh: dimensionless;
    var eqnCosh: dimensionless;
    var eqnTanh: dimensionless;
    var eqnSech: dimensionless;
    var eqnCsch: dimensionless;
    var eqnCoth: dimensionless;
    var eqnArcsin: dimensionless;
    var eqnArccos: dimensionless;
    var eqnArctan: dimensionless;
    var eqnArcsec: dimensionless;
    var eqnArccsc: dimensionless;
    var eqnArccot: dimensionless;
    var eqnArcsinh: dimensionless;
    var eqnArccosh: dimensionless;
    var eqnArctanh: dimensionless;
    var eqnArcsech: dimensionless;
    var eqnArccsch: dimensionless;
    var eqnArccoth: dimensionless;
    var eqnPiecewisePiece: dimensionless;
    var eqnPiecewisePieceOtherwise: dimensionless;
    var eqnPiecewisePiecePiecePiece: dimensionless;
    var eqnPiecewisePiecePiecePieceOtherwise: dimensionless;
    var eqnWithPiecewise: dimensionless;
    var eqnCnInteger: dimensionless;
    var eqnCnDouble: dimensionless;
    var eqnCnIntegerWithExponent: dimensionless;
    var eqnCnDoubleWithExponent: dimensionless;
    var eqnCi: dimensionless;
    var eqnTrue: dimensionless;
    var eqnFalse: dimensionless;
    var eqnExponentiale: dimensionless;
    var eqnPi: dimensionless;
    var eqnInfinity: dimensionless;
    var eqnNotanumber: dimensionless;
    var m: dimensionless {init: 1};
    var n: dimensionless {init: 2};
    var o: dimensionless {init: 3};
    var p: dimensionless {init: 4};
    var q: dimensionless {init: 5};
    var r: dimensionless {init: 6};
    var s: dimensionless {init: 7};
    // A non-MathML node needed for our coverage test.
    ode(x, t) = 1{per_second};
    eqnEq = m == n;
    eqnEqCoverageParentheses = m/(n == n);
    eqnNeq = m <> n;
    eqnNeqCoverageParentheses = m/(n <> o);
    eqnLt = m < n;
    eqnLeq = m <= n;
    eqnGt = m > n;
    eqnGeq = m >= n;
    eqnAnd = m and n;
    eqnAndMultiple = m and n and o;
    eqnAndParentheses = (m < n) and (o > p);
    eqnAndParenthesesLeftPlusWith = m+n and (o > p);
    eqnAndParenthesesLeftPlusWithout = +m and (n > o);
    eqnAndParenthesesLeftMinusWith = m-n and (o > p);
    eqnAndParenthesesLeftMinusWithout = -m and (n > o);
    eqnAndParenthesesLeftPower = pow(m, n) and (o > p);
    eqnAndParenthesesLeftRoot = sqrt(n, m) and (o > p);
    eqnAndParenthesesRightPlusWith = (m < n) and o+p;
    eqnAndParenthesesRightPlusWithout = (m < n) and +o;
    eqnAndParenthesesRightMinusWith = (m < n) and o-p;
    eqnAndParenthesesRightMinusWithout = (m < n) and -o;
    eqnAndParenthesesRightPower = (m < n) and pow(o, p);
    eqnAndParenthesesRightRoot = (m < n) and sqrt(p, o);
    eqnOr = m or n;
    eqnOrMultiple = m or n or o;
    eqnOrParentheses = (m < n) or (o > p);
    eqnOrParenthesesLeftPlusWith = m+n or (o > p);
    eqnOrParenthesesLeftPlusWithout = +m or (n > o);
    eqnOrParenthesesLeftMinusWith = m-n or (o > p);
    eqnOrParenthesesLeftMinusWithout = -m or (n > o);
    eqnOrParenthesesLeftPower = pow(m, n) or (o > p);
    eqnOrParenthesesLeftRoot = sqrt(n, m) or (o > p);
    eqnOrParenthesesRightPlusWith = (m < n) or o+p;
    eqnOrParenthesesRightPlusWithout = (m < n) or +o;
    eqnOrParenthesesRightMinusWith = (m < n) or o-p;
    eqnOrParenthesesRightMinusWithout = (m < n) or -o;
    eqnOrParenthesesRightPower = (m < n) or pow(o, p);
    eqnOrParenthesesRightRoot = (m < n) or sqrt(p, o);
    eqnXor = m xor n;
    eqnXorMultiple = m xor n xor o;
    eqnXorParentheses = (m < n) xor (o > p);
    eqnXorParenthesesLeftPlusWith = m+n xor (o > p);
    eqnXorParenthesesLeftPlusWithout = +m xor (n > o);
    eqnXorParenthesesLeftMinusWith = m-n xor (o > p);
    eqnXorParenthesesLeftMinusWithout = -m xor (n > o);
    eqnXorParenthesesLeftPower = pow(m, n) xor (o > p);
    eqnXorParenthesesLeftRoot = sqrt(n, m) xor (o > p);
    eqnXorParenthesesRightPlusWith = (m < n) xor o+p;
    eqnXorParenthesesRightPlusWithout = (m < n) xor +o;
    eqnXorParenthesesRightMinusWith = (m < n) xor o-p;
    eqnXorParenthesesRightMinusWithout = (m < n) xor -o;
    eqnXorParenthesesRightPower = (m < n) xor pow(o, p);
    eqnXorParenthesesRightRoot = (m < n) xor sqrt(p, o);
    eqnNot = not m;
    eqnPlus = m+n;
    eqnPlusMultiple = m+n+o;
    eqnPlusParentheses = (m < n)+(o > p);
    eqnPlusUnary = +m;
    eqnMinus = m-n;
    eqnMinusParentheses = (m < n)-(o > p);
    eqnMinusParenthesesPlusWith = (m < n)-(o+p);
    eqnMinusParenthesesPlusWithout = (m < n)-(+o);
    eqnMinusUnary = -m;
    eqnMinusUnaryParentheses = -(m < n);
    eqnTimes = m*n;
    eqnTimesMultiple = m*n*o;
    eqnTimesParentheses = (m < n)*(o > p);
    eqnTimesParenthesesLeftPlusWith = (m+n)*(o > p);
    eqnTimesParenthesesLeftPlusWithout = +m*(n > o);
    eqnTimesParenthesesLeftMinusWith = (m-n)*(o > p);
    eqnTimesParenthesesLeftMinusWithout = -m*(n > o);
    eqnTimesParenthesesRightPlusWith = (m < n)*(o+p);
    eqnTimesParenthesesRightPlusWithout = (m < n)*(+o);
    eqnTimesParenthesesRightMinusWith = (m < n)*(o-p);
    eqnTimesParenthesesRightMinusWithout = (m < n)*(-o);
    eqnDivide = m/n;
    eqnDivideParentheses = (m < n)/(p > o);
    eqnDivideParenthesesLeftPlusWith = (m+n)/(p > o);
    eqnDivideParenthesesLeftPlusWithout = +m/(o > n);
    eqnDivideParenthesesLeftMinusWith = (m-n)/(p > o);
    eqnDivideParenthesesLeftMinusWithout = -m/(o > n);
    eqnDivideParenthesesRightPlusWith = (m < n)/(o+p);
    eqnDivideParenthesesRightPlusWithout = (m < n)/(+o);
    eqnDivideParenthesesRightMinusWith = (m < n)/(o-p);
    eqnDivideParenthesesRightMinusWithout = (m < n)/(-o);
    eqnDivideParenthesesRightTimes = (m < n)/(o*p);
    eqnDivideParenthesesRightDivide = (m < n)/(o/p);
    eqnPowerSqrt = pow(m, 0.5{dimensionless});
    eqnPowerSqr = sqr(m);
    eqnPowerCube = pow(m, 3{dimensionless});
    eqnPowerCi = pow(m, n);
    eqnPowerParentheses = pow(m < n, o > p);
    eqnPowerParenthesesLeftPlusWith = pow(m+n, o > p);
    eqnPowerParenthesesLeftPlusWithout = pow(+m, n > o);
    eqnPowerParenthesesLeftMinusWith = pow(m-n, o > p);
    eqnPowerParenthesesLeftMinusWithout = pow(-m, n > o);
    eqnPowerParenthesesLeftTimes = pow(m*n, o > p);
    eqnPowerParenthesesLeftDivide = pow(m/n, o > p);
    eqnPowerParenthesesRightPlusWith = pow(m < n, o+p);
    eqnPowerParenthesesRightPlusWithout = pow(m < n, +o);
    eqnPowerParenthesesRightMinusWith = pow(m < n, o-p);
    eqnPowerParenthesesRightMinusWithout = pow(m < n, -o);
    eqnPowerParenthesesRightTimes = pow(m < n, o*p);
    eqnPowerParenthesesRightDivide = pow(m < n, o/p);
    eqnPowerParenthesesRightPower = pow(m < n, pow(o, p));
    eqnPowerParenthesesRightRoot = pow(m < n, sqrt(p, o));
    eqnRootSqrt = sqrt(m);
    eqnRootSqrtOther = root(m, 2{dimensionless});
    eqnRootCube = root(m, 3{dimensionless});
    eqnRootCi = root(m, n);
    eqnRootParentheses = sqrt(p > o, m < n);
    eqnRootParenthesesLeftPlusWith = sqrt(p > o, m+n);
    eqnRootParenthesesLeftPlusWithout = sqrt(o > n, +m);
    eqnRootParenthesesLeftMinusWith = sqrt(p > o, m-n);
    eqnRootParenthesesLeftMinusWithout = sqrt(o > n, -m);
    eqnRootParenthesesLeftTimes = sqrt(p > o, m*n);
    eqnRootParenthesesLeftDivide = sqrt(p > o, m/n);
    eqnRootParenthesesRightPlusWith = sqrt(o+p, m < n);
    eqnRootParenthesesRightPlusWithout = sqrt(+o, m < n);
    eqnRootParenthesesRightMinusWith = sqrt(o-p, m < n);
    eqnRootParenthesesRightMinusWithout = sqrt(-o, m < n);
    eqnRootParenthesesRightTimes = sqrt(o*p, m < n);
    eqnRootParenthesesRightDivide = sqrt(o/p, m < n);
    eqnRootParenthesesRightPower = sqrt(pow(o, p), m < n);
    eqnRootParenthesesRightRoot = sqrt(sqrt(p, o), m < n);
    eqnAbs = abs(m);
    eqnExp = exp(m);
    eqnLn = ln(m);
    eqnLog = log(m);
    eqnLog2 = log(m, 2{dimensionless});
    eqnLog10 = log(m, 10{dimensionless});
    eqnLogCi = log(m, n);
    eqnCeiling = ceil(m);
    eqnFloor = floor(m);
    eqnMin = min(m, n);
    eqnMinMultiple = min(m, n, o);
    eqnMax = max(m, n);
    eqnMaxMultiple = max(m, n, o);
    eqnRem = rem(m, n);
    eqnSin = sin(m);
    eqnCos = cos(m);
    eqnTan = tan(m);
    eqnSec = sec(m);
    eqnCsc = csc(m);
    eqnCot = cot(m);
    eqnSinh = sinh(m);
    eqnCosh = cosh(m);
    eqnTanh = tanh(m);
    eqnSech = sech(m);
    eqnCsch = csch(m);
    eqnCoth = coth(m);
    eqnArcsin = asin(m);
    eqnArccos = acos(m);
    eqnArctan = atan(m);
    eqnArcsec = asec(m);
    eqnArccsc = acsc(m);
    eqnArccot = acot(m);
    eqnArcsinh = asinh(m);
    eqnArccosh = acosh(m);
    eqnArctanh = atanh(m/2{dimensionless});
    eqnArcsech = asech(m);
    eqnArccsch = acsch(m);
    eqnArccoth = acoth(2{dimensionless}*m);
    eqnPiecewisePiece = sel
      case m > n:
        m;
    endsel;
    eqnPiecewisePieceOtherwise = sel
      case m > n:
        m;
      otherwise:
        o;
    endsel;
    eqnPiecewisePiecePiecePiece = sel
      case m > n:
        m;
      case o > p:
        o;
      case q > r:
        q;
    endsel;
    eqnPiecewisePiecePiecePieceOtherwise = sel
      case m > n:
        m;
      case o > p:
        o;
      case q > r:
        q;
      otherwise:
        s;
    endsel;
    eqnWithPiecewise = 123{dimensionless}+sel(case m > n: m);
    eqnCnInteger = 123{dimensionless};
    eqnCnDouble = 123.456789{dimensionless};
    eqnCnIntegerWithExponent = 123e99{dimensionless};
    eqnCnDoubleWithExponent = 123.456789e99{dimensionless};
    eqnCi = m;
    eqnTrue = true;
    eqnFalse = false;
    eqnExponentiale = e;
    eqnPi = pi;
    eqnInfinity = inf;
    eqnNotanumber = nan;
  enddef;
  def group as encapsulation for
    comp dummy_top_component incl
      comp dummy_bottom_component;
      comp my_component;
    endcomp;
  enddef;
enddef;
